CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140723174500
GitHash:6c2d896
ModuleCount:9
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:No filtering
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:1
    Select the rule criteria:or (file does contain "E - ") (file does contain "F - ") (file does contain "G -") (file does contain "H -")
    Name to assign these images:fish_images
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Single image location:file:///C:/Users/harri_000/Documents/Zebrafish%20Project/Zebrafish-Image-Processing/process_Mask.tif   
    Name to assign this image:mask
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    Select the image type:Binary mask
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
MaskImage:[module_num:5|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
    Select the input image:fish_images
    Name the output image:post_mask
    Use objects or an image as a mask?:Image
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    Select image for mask:mask
    Invert the mask?:No

MeasureImageIntensity:[module_num:6|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
    Select the image to measure:post_mask
    Measure the intensity only from areas enclosed by objects?:No
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:post_mask
    Name the primary objects to be identified:Neurons
    Typical diameter of objects, in pixel units (Min,Max):2,20
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:No
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Measurement
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    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:12
    Lower and upper bounds on threshold:0.0005,1.0
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    Select the measurement to threshold with:Intensity_MeanIntensity_post_mask
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
MeasureObjectIntensity:[module_num:8|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
    Hidden:1
    Select an image to measure:post_mask
    Select objects to measure:Neurons

ExportToSpreadsheet:[module_num:9|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix::Mtz_and_DMSO_comparisons_Positive_Control_data
    Overwrite without warning?:No
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